PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  backgroundFit = cover
  expName = untitled
  keyboardBackend = PsychToolbox
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Routines
  Routine good
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every frame] = Good
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  Routine bad
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every frame] = Wrong
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  Routine start
    MouseComponent mouse
      clickable = grating
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    GratingComponent grating
      mask = gauss
      pos [set every frame] = (responses - 0.5, 0)
      sf [set every frame] = SF
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      tex = sin
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    ApertureComponent aperture
      pos [set every frame] = (responses - 0.5, 0)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = norm
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    VariableComponent nOmission
      startExpValue = 1
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    VariableComponent mousePos
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        #To set up each box change the line 8 for the right path
        #Also change the name of the Log file by editing line 10

        import GPIO4

        exp = data.ExperimentHandler(name="OUT", version='',
            extraInfo=None, runtimeInfo=None,
            originPath='C:\\Users\\pfh3221\\OneDrive - Université de Moncton\\Documents\\GitHub2\\skinnerboxmanager',
            savePickle=False, saveWideText=True,
            dataFileName="OUT1")
      Begin Experiment:
        clock = core.Clock()

        def log(event:str):  #This is where the time stamps for each event is setted
            exp.addData('time', clock.getTime())
            exp.addData('event', event)
            exp.nextEntry()

        log('START')
      Begin Routine:
        mouse.setPos((0,-1))
        nOmission = 1 #par défaut omission sauf si l'animal donne une réponse

        log('Response L/R: ' + str(responses))
        log('Spatial Freq: ' + str(SF))

        if responses:
            circlePos = 0.5
        else:
            circlePos = -0.5
      Each Frame:
        if mouse.getPos()[0] != 0:
            continueRoutine = False
            nOmission = 0
            if (mouse.getPos()[0] > 0 and responses == 1) or (mouse.getPos()[0] < 0 and responses == 0):
                log('Good')
                GPIO4.send("FDR") #Envoie la commande au arduino pour une récompense
                log('Reward')
                nOmission = 0

        #        IR = GPIO4.receive_data()
        #        if IR is not None:
        #             while GPIO4.send(IR, True) != "1" or GPIO4.send(IR, True) != 1:
        #             #continue
        #                 log('IR')

            elif mouse.getPos()[0] != 0:
                nOmission = 0
        else:
            nOmission = 1 #donc si l'animal ne répond pas = Omission
      End Experiment:
        log('END')
      End Routine:
        if mouse.getPos()[0] == 0:
            nOmission = 1 #pas 100% certain de la logique mais ça fonctionne
                           #si l'animal n'a pas bougé la souris la routine termine et
                           #on log une omission

            log('End Omission')
  Routine omission
    PolygonComponent bkg_omission
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $OM_duration
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    TextComponent txt_omission
      color = gray
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $OM_duration
      text = OM
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  Routine Presentation
    ApertureComponent Stim_presentation
      disabled = True
      shape = circle
      size = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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  Routine ITI
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    TextComponent ITI_delay
      color = gray
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
      text = ITI
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  Routine Show_conditions
    PolygonComponent bkg_trialstart
      fillColor = white
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Showcondition_duration
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    TextComponent txt_trialstart
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Showcondition_duration
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      text [set every repeat]:
        $txt_trialstart.setText(str(SF))
  Routine delay_start
    PolygonComponent bkg_wait
      fillColor = black
      shape = rectangle
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Delaystart_duration
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    TextComponent txt_wait
      color = gray
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Delaystart_duration
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      text:
        $start_time
    CodeComponent display_run_start
      Code Type = Py
      Before Experiment:
        import datetime

        start_time = str(datetime.datetime.now())

        Delaystart_duration = 15
        Showcondition_duration = 1
        ITI_duration = 10
        OM_duration = 10
Flow
  Routine delay_start
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = data.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'responses': 1},
      {'responses': 0},
      {'responses': 0},
      {'responses': 1},
      {'responses': 0},
      {'responses': 1},
      {'responses': 1}]
    Routine Show_conditions
    Routine start
    Routine Presentation
    LoopInitiator loop_if_omission loopType="TrialHandler"
      loopType = random
      nReps = nOmission
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      Routine omission
    LoopTerminator loop_if_omission
    Routine ITI
  LoopTerminator trials_4
