PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1536, 864]
  backgroundFit = cover
  expName = untitled
  keyboardBackend = PsychToolbox
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Routines
  Routine good
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine bad
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine start
    MouseComponent mouse
      clickable = grating
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    GratingComponent grating
      sf = 10
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      tex = sin
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    ApertureComponent aperture
      pos [set every frame] = (responses - 0.5, 0)
      shape = circle
      size = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    VariableComponent nOmition
      startExpValue = 1
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    VariableComponent mousePos
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import GPIO4

        exp = data.ExperimentHandler(name="OUT", version='',
            extraInfo=None, runtimeInfo=None,
            originPath='C:\\Users\\pfh3221\\OneDrive - Université de Moncton\\Documents\\GitHub2\\skinnerboxmanager',
            savePickle=False, saveWideText=True,
            dataFileName="OUT1")
      Begin Experiment:
        clock = core.Clock()

        def log(event:str):
            exp.addData('time', clock.getTime())
            exp.addData('event', event)
            exp.nextEntry()

        log('START')
      Begin Routine:
        mouse.setPos((0,-1))
        nOmition = 1

        if responses:
            circlePos = 0.5
        else:
            circlePos = -0.5
      Each Frame:
        if mouse.getPos()[0] != 0:
            log('Response: ' + str(responses))
            continueRoutine = False
            if (mouse.getPos()[0] > 0 and responses == 1) or (mouse.getPos()[0] < 0 and responses == 0):
                log('Good')
                GPIO4.send("FDR")
                log('Reward')

        #        IR = GPIO4.receive_data()
        #        if IR is not None:
        #             while GPIO4.send(IR, True) != "1" or GPIO4.send(IR, True) != 1:
        #             #continue
        #                 log('IR')

            elif mouse.getPos()[0] != 0:
                log('Bad')
            nOmition = 0
            log('Omission')
      End Experiment:
        log('END')
  Routine delay
    ApertureComponent aperture_2
      shape = circle
      size = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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  Routine omission
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = omition
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Flow
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = data.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'responses': 1},
      {'responses': 0},
      {'responses': 0},
      {'responses': 1},
      {'responses': 0},
      {'responses': 1},
      {'responses': 1}]
    Routine start
    Routine delay
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = nOmition
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      Routine omission
    LoopTerminator trials_3
  LoopTerminator trials_4
