PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [2560, 1440]
  expName = screenacquitytest
  keyboardBackend = ioHub
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Routines
  Routine trial
    GratingComponent grating
      color = 1,1,1
      contrast = 0.5
      interpolate = nearest
      pos = (-1, 0)
      sf [set every repeat] = SF
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      tex = sin
      units = deg
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    GratingComponent grating_2
      contrast = 0
      pos = (1, 0)
      sf [set every repeat] = SF
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      tex = sin
      units = deg
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    PolygonComponent polygon
      disabled = True
      fillColor = 0.3500, 0.3500, 0.3500
      pos = (0, -2)
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = deg
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  Routine size
    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $SF
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{'responses': 1, 'SF': 2},
      {'responses': 0, 'SF': 4},
      {'responses': 0, 'SF': 8},
      {'responses': 1, 'SF': 16},
      {'responses': 0, 'SF': 32},
      {'responses': 0, 'SF': 64},
      {'responses': 1, 'SF': 2},
      {'responses': 1, 'SF': 2},
      {'responses': 0, 'SF': 2}]
    Routine size
    Routine trial
  LoopTerminator trials
